# Generated by Configurator with radioxoma on Fri May 30 06:40:33 VET 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,DObjective,DemoCamera,DObjective

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,Objective-D
Label,DObjective,2,Objective-C
Label,DObjective,1,Objective-B
Label,DObjective,0,Objective-A

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,DCam,Binning,1
ConfigGroup,System,Startup,DCam,BitDepth,8
ConfigGroup,System,Startup,DCam,Exposure,25.0000
ConfigGroup,System,Startup,DCam,Gain,1



# PixelSize settings
# Resolution preset: Res5x
ConfigPixelSize,Res5x,DObjective,Label,Objective-A
PixelSize_um,Res5x,0.9142848214294433

# Resolution preset: Res10x
ConfigPixelSize,Res10x,DObjective,Label,Objective-B
PixelSize_um,Res10x,0.45714241071472167

# Resolution preset: Res20x
ConfigPixelSize,Res20x,DObjective,Label,Objective-C
PixelSize_um,Res20x,0.22857120535736083

# Resolution preset: Res63x
ConfigPixelSize,Res63x,DObjective,Label,Objective-D
PixelSize_um,Res63x,0.07256228741503519

# Resolution preset: Res100x
ConfigPixelSize,Res100x,DObjective,Label,Objective-E
PixelSize_um,Res100x,0.04571


